CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160503183100
GitHash:ac0529e
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<Plate>.*)_w(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:DNA
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:DNA
    Name the output image:llumDNA
    Select how the illumination function is calculated:Background
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    Block size:20
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:30
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:6|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
    Select the input image:DNA
    Name the output image:CorrDNA
    Select the illumination function:llumDNA
    Select how the illumination function is applied:Subtract

IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:CorrDNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):15,40
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Laplacian of Gaussian
    Method to draw dividing lines between clumped objects:Propagate
    Size of smoothing filter:5
    Suppress local maxima that are closer than this minimum allowed distance:7
    Speed up by using lower-resolution image to find local maxima?:No
    Name the outline image:NucleiOutlines
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Retain outlines of the identified objects?:Yes
    Automatically calculate the threshold using the Otsu method?:Yes
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    Automatically calculate the size of objects for the Laplacian of Gaussian filter?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
SaveImages:[module_num:8|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
    Select the type of image to save:Objects
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    Select the objects to save:Nuclei
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    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:No
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    Saved file format:tif
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Grayscale
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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